PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], ' ', 'PHASE III')
  expName = ATNT_Intrusions_Phase_v4
  Screen = 2
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Routines
  Routine Intrusions_practice
    TextComponent Rating
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.8
      letterHeight = 0.1
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      text [set every repeat]:
        $Intr_Rating
    StaticComponent ISI_2
      stopVal [duration (s)] = 0.4
      startVal [time (s)] = 0.0
    TextComponent Fixate
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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  Routine Intrusions_practice_response
    TextComponent Intr_scale
      text = 1 2 3
      startVal [time (s)] = 0.1
      letterHeight = 0.1
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    KeyboardComponent rating_response
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys = '1', '2', '3',
      startVal [time (s)] = 0.1
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    CodeComponent rating_code
      Each Frame:
        if rating_response.corr == 1:
            continueRoutine = False
  Routine Practice1
    TextComponent Practice1_instr
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Practice 1 begins now.

        Please wait for the experimenter.
    KeyboardComponent Practice1_resp
      forceEndRoutine = True
      allowedKeys = "space"
      startVal [time (s)] = 0.0
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  Routine Practice_Code
    CodeComponent codePractice
      Begin Experiment:
        #create a list of the order in which to show test items
        practice_order = range(num_practice)

        #randomise the order of test list items
        random.shuffle(practice_order)

        #current test trial
        practice_trial = 0
      Begin Routine:
        if practice_trial%num_practice == 0:
            random.shuffle(practice_order)

        #assign the actual stimuli to variables that are used in the blocks
        category = category_item[practice_order[practice_trial%num_practice]]
        title = title_item[practice_order[practice_trial%num_practice]]
        colour = cue_colour[practice_order[practice_trial%num_practice]]

        #for debug purposes
        #print practice_order

        #Add data to data file
        thisExp.addData("category", category)
        thisExp.addData("title", title)
        thisExp.addData("colour", colour)

        thisExp.addData('practice_trial', practice_trial)
        thisExp.addData('practice_order', practice_order)


        #incrememnt the current practice item counter
        practice_trial = practice_trial+1
  Routine Main_Exp
    TextComponent Main_Experiment
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is the end of practice.

        The actual experiment begins now.

        Please wait for the experimenter to adminster the questionnaire.

        You may press any key to continue after the questionnaire.
    KeyboardComponent Exp_response
      forceEndRoutine = True
      allowedKeys = "space"
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Think_No_Think
    TextComponent Fixation
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    StaticComponent ISI
      stopVal [duration (s)] = 0.4
      startVal [time (s)] = 0.0
    TextComponent title_cue
      color [set every repeat] = $colour
      text [set every repeat] = $title
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.6
      letterHeight = 0.1
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  Routine Continue_intrs
    TextComponent Continue_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Continue?

        Y/N
    KeyboardComponent Continue_rsp
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.0
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    CodeComponent codeContinue
      Begin Routine:
        if Continue_rsp.keys == 'y':
            Intrs_repeat_loop.finished = True
  Routine PracCode
    CodeComponent code_Prac
      Begin Experiment:
        #create a list of the order in which to show test items
        prac_order = range(num_practice)

        #randomise the order of test list items
        random.shuffle(prac_order)

        #current test trial
        prac_trial = 0
      Begin Routine:
        #randomises order of stimulus presentation after one loop of presenting all stimuli
        if prac_trial%num_practice == 0:
            random.shuffle(prac_order)

        #assign the stimuli to variables that are used in the blocks
        title = title_item_prac[prac_order[prac_trial%num_practice]]
        colour = cue_colour_prac[prac_order[prac_trial%num_practice]]

        #for debug purposes
        #print test_order

        #Add data to data file
        thisExp.addData("title", title)
        thisExp.addData("colour", colour)

        thisExp.addData('practice_trial', prac_trial)
        thisExp.addData('practice_order', prac_order)

        #incrememnt the current test item counter
        prac_trial = prac_trial+1
  Routine Break
    TextComponent Break_Instr
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please take a short break.

        Whenever you are ready to resume, press any key to continue.
    KeyboardComponent Break_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent Break_Code
      Begin Experiment:
        mycount=0
      Begin Routine:
        mycount=mycount+1
      Each Frame:
        if mycount==144:
            continueRoutine = False
        elif mycount==240:
            continueRoutine = False
        elif mycount%48!=0:
            continueRoutine = False
  Routine Test_Code
    CodeComponent codeTest
      Begin Experiment:
        #create a list of the order in which to show test items
        test_order = range(num_test)

        #randomise the order of test list items
        random.shuffle(test_order)

        #current loop number
        loop_number = 0

        #current test trial
        test_trial = 0
      Begin Routine:
        #randomises order of stimulus presentation after one loop of presenting all stimuli
        if test_trial%num_test == 0:
            loop_number = loop_number+1
            random.shuffle(test_order)

        #assign the current stimulus number to var stimulus_number
        stimulus_number = test_order[test_trial%num_test]

        #assign the stimuli to variables that are used in the blocks
        title = title_item[stimulus_number]
        colour = cue_colour[stimulus_number]
        moral_cond = moral_cond_item[stimulus_number]
        stim_no = stim_no_item[stimulus_number]


        #for debug purposes
        #print test_order

        #Add data to data file
        thisExp.addData("title", title)
        thisExp.addData("colour", colour)
        thisExp.addData("morality", moral_cond)

        thisExp.addData('test_trial', test_trial)
        thisExp.addData('test_order', test_order)
        thisExp.addData('randomised_no', stimulus_number)
        thisExp.addData('stimulus_no', stim_no)
        thisExp.addData('loop_number', loop_number)

        #incrememnt the current test item counter
        test_trial = test_trial+1
  Routine Practice2
    TextComponent Practice2_instr
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please wait for the experimenter to adminster the questionnaire.

        Practice 2 begins after the questionnaire.

        Press any key to continue.
    KeyboardComponent Practice2_resp
      forceEndRoutine = True
      allowedKeys = "space"
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Practice3
    TextComponent Prac3_instr
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Practice 3 begins now

        Please wait for the experimenter.
    KeyboardComponent Prac3_instr_resp
      forceEndRoutine = True
      allowedKeys = "space"
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Intrusions
    TextComponent Intrusion_Rating
      text = 1 2 3
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.1
      letterHeight = 0.1
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    KeyboardComponent Intrusion_response
      stopVal [duration (s)] = 1.5
      forceEndRoutine = True
      allowedKeys = '1','2','3'
      startVal [time (s)] = 0.1
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  Routine End
    TextComponent END_
      text = Please take a break now if you wish to and wait for the experimenter.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent End_Response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Break_questionnaire
    TextComponent Break_q
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please take a break now and call the experimenter.

        You are halfway through this task.
    KeyboardComponent Break_q_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        mycount1 = 0
      Begin Routine:
        mycount1=mycount1+1
      Each Frame:
        if mycount1 != 144:
            continueRoutine = False
  Routine Continue_TNT
    TextComponent Continue_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Continue?

        Y/N
    KeyboardComponent Continue_resp
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.0
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    CodeComponent Continue_code
      Begin Routine:
        if Continue_resp.keys == "y":
            TNT_repeat_loop.finished = True
  Routine Fixation_START
    TextComponent FIX
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent StartExp
      forceEndRoutine = True
      allowedKeys = 'b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Initialise_Code
    CodeComponent Initialising_code
      Begin Experiment:
        import random, xlrd

        #randomise the seed so that each time file is opened, the order of presentation is randomised
        random.seed()

        #stimulus file for the main experiment loop
        infile = 'Participants_Data/'+expInfo['participant']+'.xlsx'

        #number of test items
        num_test = 12

        #number of repetitions you want in test loop
        num_test_reps = 20

        #calculate total number of trials in main experiment
        num_test_trials = num_test*num_test_reps


        #number of practice items
        num_practice = 2

        #number of repititions of practice items
        num_practice_reps = 5

        #number of total trials in main experiment
        num_practice_trials = num_practice*num_practice_reps

        #number of total items in your stimulus file
        num_total = 14
      Begin Routine:
        #access the xlsx stimulus file
        inbook = xlrd.open_workbook(infile)
        insheet = inbook.sheet_by_index(0) #go to xlsx file and get sheet number 1

        #arrays for our stimuli

        title_ar = []
        moral_cond = []
        stim_no = []

        #read the stimuli from our sheet
        for rowx in range(1,num_test+1):

            row = insheet.row_values(rowx) #assign all column values for each row to arrayed variable "row"

            #print out the value of column A and B for debugging
            print row[0]+" "+row[1]

            title_ar.append(row[0])
            moral_cond.append(row[1])
            stim_no.append(row[2])


        #create a stimulus order list
        stim_order = range(num_test)

        #randomises the order of the stimulus array
        random.shuffle(stim_order)

        #arrays for our final stimuli
        title_item = []
        moral_cond_item = []
        stim_no_item = []
        cue_colour = []

        count_r = 0
        count_w = 0

        #create in final stimulus list
        for i in range(num_test):

            #assign a item from the list of items

            title_item.append(title_ar[stim_order[i]])
            moral_cond_item.append(moral_cond[stim_order[i]])
            stim_no_item.append(stim_no[stim_order[i]])

            print title_item[i] + moral_cond_item[i]

            #determine the colour of the items
            if moral_cond_item[i] == "Right":                  #This if statement is to ensure that colour is assigned equally across morality conditions
                if count_r <=2:
                    cue_colour.append("green")
                else:
                    cue_colour.append("red")
                count_r = count_r + 1

                print "count_r:", count_r
            else:
                if count_w <=2:                                  #All even rows will be green and all odd rows will be red for morally wrong cues
                    cue_colour.append("green")
                else:
                    cue_colour.append("red")
                count_w = count_w + 1
                print "count_w", count_w

            #user output for debug purposes
            print "item #" + str(i) + ":" + " " + title_item[i]+ " "+ moral_cond_item[i] + " " + cue_colour[i]

        #READ STIMULI for PRACTICE BLOCKS

        #arrays for our stimuli

        title_ar_prac = []

        #read the stimuli from our sheet
        for rowx in range(num_test+1,num_total+1):

            row = insheet.row_values(rowx) #assign all column values for each row to arrayed variable "row"

            #print out the value of column A and B for debugging
            #print row[0]+' '+row[1]+' '+row[2]

            title_ar_prac.append(row[0])

        #create a stimulus order list
        stim_order_prac = range(num_practice)

        #randomises the order of the stimulus array
        random.shuffle(stim_order_prac)

        #arrays for our final practice stimuli

        title_item_prac = []
        cue_colour_prac = []

        #create in final stimulus list
        for i in range(num_practice):

            #assign a item from the list of items
            title_item_prac.append(title_ar_prac[stim_order_prac[i]])


            #determine the colour of the items
            if i==0:                                  #All even rows will be green and all odd rows will be red for morally right cues
                cue_colour_prac.append("green")
            else:
                cue_colour_prac.append("red")

            #user output for debug purposes
            #print "item #" + str(i) + ": " + category_item_prac[i] + " " + title_item_prac[i]+ " "+ cue_colour_prac[i]
  Routine Instructions
    TextComponent Instr
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Instructions will be given by the experimenter.

        Press any key to continue.
    KeyboardComponent Instr_Resp
      forceEndRoutine = True
      allowedKeys = "space"
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Initialise_Code
  Routine Instructions
  Routine Practice1
  Routine Fixation_START
  LoopInitiator TNT_Loop loopType="TrialHandler"
    loopType = random
    nReps = $num_practice_trials
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    Routine PracCode
    Routine Think_No_Think
  LoopTerminator TNT_Loop
  Routine Practice2
  Routine Fixation_START
  LoopInitiator Intr_practice_loop loopType="TrialHandler"
    conditionsFile = Intrusions study Practice2 conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'Intr_Rating': u'Never', 'corrAns': 1},
      {'Intr_Rating': u'Briefly', 'corrAns': 2},
      {'Intr_Rating': u'Often', 'corrAns': 3}]
    Routine Intrusions_practice
    Routine Intrusions_practice_response
  LoopTerminator Intr_practice_loop
  Routine Practice3
  Routine Fixation_START
  LoopInitiator Practice_exp_loop loopType="TrialHandler"
    loopType = random
    nReps = $num_practice_trials
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    Routine PracCode
    Routine Think_No_Think
    Routine Intrusions
  LoopTerminator Practice_exp_loop
  Routine Main_Exp
  Routine Fixation_START
  LoopInitiator TNT_loop loopType="TrialHandler"
    loopType = random
    nReps = $num_test_trials
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    Routine Test_Code
    Routine Think_No_Think
    Routine Intrusions
    Routine Break_questionnaire
    Routine Break
  LoopTerminator TNT_loop
  Routine End
