PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1600, 1200]
  Full-screen window = True
  expName = Study_Recall_Phases_final
  Screen = 1
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Routines
  Routine Fback_Phase_Cue
    StaticComponent ISI_2
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
    TextComponent Fixation_
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    TextComponent Title_cues
      text [set every repeat] = $title
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent Cue_response
      stopVal [duration (s)] = 4.0
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
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  Routine Pass_
    TextComponent Continue_
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please wait for the experimenter.

        Y/N
    KeyboardComponent Continue_Resp
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.0
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    CodeComponent Continue_code
      End Routine:
        if Continue_Resp.keys == 'y':
            Continue_Loop.finished = True;
  Routine End
    TextComponent End_
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You may take a break now if you wish to.

        Please wait for the experimenter.
    KeyboardComponent End_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
    TextComponent Feedback_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The experimenter will give you a sheet with the correct answer.

        Press the space bar when you have read the sheet and are ready to move on.
    KeyboardComponent Feedback_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Study_Instr
    TextComponent Instr
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Phase I begins now.

        Press any key to continue.
    KeyboardComponent Instr_Resp
      forceEndRoutine = True
      allowedKeys = "space"
      startVal [time (s)] = 0.0
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  Routine ImportFile_code1
    CodeComponent Import_code1
      Begin Routine:
        #use excel file for loop "StudyPhase" based on participant ID
        #StudyPhase_loop = data.TrialHandler(trialList=data.importConditions[infile])
  Routine Fback_Phase_Response
    TextComponent Recall_Instr
      stopVal [duration (s)] = 60.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Remember the event related to the word phrase and talk about it out loud.

        Try to answer these three questions:
        Who/what was involved?
        What were your actions?

        You have 60 seconds
    KeyboardComponent Recall_Instr_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Feedback_Begins
    TextComponent FBack_
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Phase 2 begins now.

        Press any key to continue.
    KeyboardComponent Fback_response
      forceEndRoutine = True
      allowedKeys = "space"
      startVal [time (s)] = 0.0
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  Routine Study_Phase
    TextComponent Fixation
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Title_cue
      text [set every repeat] = $title
      stopVal [duration (s)] = 60.0
      startVal [time (s)] = 0.7
      letterHeight = 0.1
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    KeyboardComponent Cue_advance
      stopVal [duration (s)] = 60.0
      forceEndRoutine = True
      allowedKeys = "space"
      startVal [time (s)] = 0.7
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  Routine FBack_code
    CodeComponent codeFback
      Begin Experiment:
        #create a list of the order in which to show feedback items
        fback_order = range(num_fback)

        #current test trial
        fback_trial = 0
      Begin Routine:
        #assign the stimuli to variables that are used in the blocks
        title = title_item[fback_order[fback_trial%num_fback]]

        #for debug purposes
        #print fback_order

        #Add data to data file
        thisExp.addData("title", title)

        thisExp.addData('fback_trial', fback_trial)
        thisExp.addData('fback_order', fback_order)

        #incrememnt the current test item counter
        fback_trial = fback_trial+1
  Routine Initialise_code
    CodeComponent Initialising_code
      Begin Experiment:
        import xlrd

        #store the excel spreadsheet of the participant data in variable infile

        infile = 'Participants_Data/'+expInfo['participant']+'.xlsx'

        #number of items in feedback phase

        num_fback = 14

        #number of reps you want in fback phase
        num_fback_reps = 1

        #number of total trials in fback phase
        num_fback_trials = num_fback*num_fback_reps
      Begin Routine:
        #access the xlsx stimulus file
        inbook = xlrd.open_workbook(infile)
        insheet = inbook.sheet_by_index(0) #go to xlsx file and get sheet number 1

        #arrays for our stimuli
        title_ar = []
        moral_cond = []

        #read the stimuli from our sheet
        for rowx in range(1,num_fback+1):

            row = insheet.row_values(rowx) #assign all column values for each row to arrayed variable "row"

            #print out the value of column A and B for debugging
            #print row[0]+' '+row[1]+" "+row[3]

            title_ar.append(row[0])
            moral_cond.append(row[1])

        #create a stimulus order list according to pre-determined pseudo-random list
        stim_order = [7, 4, 13, 10, 8, 3, 5, 11, 1, 6, 2, 0, 9, 12]

        #arrays for our final stimuli
        title_item = []
        moral_cond_item = []

        #create in final stimulus list
        for i in range(num_fback):

            #assign an item from the list of items
            title_item.append(title_ar[stim_order[i]])
            moral_cond_item.append(moral_cond[stim_order[i]])


            #user output for debug purposes
            #print "item #" + str(i) + ": " + category_item[i] + " " + title_item[i]+ " "+ moral_cond_item[i]
  Routine ImportFile_code2
    CodeComponent Import_code2
      Begin Routine:
        #use excel file for loop "StudyPhase" based on participant ID
        #Fback_loop = data.TrialHandler(trialList=data.importConditions[infile])
Flow
  Routine Initialise_code
  Routine Study_Instr
  LoopInitiator StudyPhase_loops loopType="TrialHandler"
    conditionsFile = $infile
    loopType = sequential
    nReps = 1
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    Routine Study_Phase
  LoopTerminator StudyPhase_loops
  Routine Feedback_Begins
  LoopInitiator Continue_Loop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator FBack_loop loopType="TrialHandler"
      loopType = sequential
      nReps = $num_fback_trials
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      Routine FBack_code
      Routine Fback_Phase_Cue
      Routine Fback_Phase_Response
      Routine Feedback
    LoopTerminator FBack_loop
    Routine Pass_
  LoopTerminator Continue_Loop
  Routine End
